PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        STROOP TASK

        Press F for RED
        Press G for GREEN
        Press H for BLUE
        Press J for YELLOW

        Ignore the word - press the color you SEE!

        Press SPACE to begin
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = -0.001
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  Routine stroop_trial
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    TextComponent fixation
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent stim_word
      color = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text = $word
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    KeyboardComponent resp
      allowedKeys = 'f','g','h','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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  Routine feedback
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    TextComponent fb_text
      color = $fb_color
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = $fb_msg
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Flow
  Routine instructions
  Routine stroop_trial
  Routine feedback
