PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.8
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      text:
        STROOP TASK

        You will see color words displayed in different colors.
        Press F for RED
        Press G for GREEN
        Press B for BLUE
        Press Y for YELLOW

        Ignore the word meaning, respond to the INK COLOR.

        Press SPACE to begin.
  Routine fixation
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    TextComponent fix_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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  Routine stroop_trial
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    TextComponent stimulus
      color = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $word
      units = height
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    KeyboardComponent response
      allowedKeys = 'f','g','b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.8
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      text:
        Thank you for participating!

        Press SPACE to exit.
Flow
  Routine instructions
  Routine fixation
  Routine stroop_trial
  Routine end
