PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine InstructionStart
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    TextComponent instrText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this experiment, a green circle will appear on the screen. Your goal is to press the SPACEBAR as quickly as possible when you see it. Keep your finger on the spacebar and focus on the center cross.
      units = norm
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    KeyboardComponent instrKey
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent fixCross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine Foreperiod
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    TextComponent blankScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = NaN
      units = norm
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  Routine StimulusResponse
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    TextComponent targetCircle
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = O
      units = norm
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    KeyboardComponent respKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine FeedbackEarly
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    TextComponent fbEarlyText
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Too Early! Wait for the circle.
      units = norm
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  Routine Fixation
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  Routine FeedbackCorrect
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    TextComponent fbCorrectText
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Correct!
      units = norm
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  Routine FeedbackSlow
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    TextComponent fbSlowText
      color = orange
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Too Slow! Try to be faster.
      units = norm
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  Routine Foreperiod
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  Routine ITI
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    TextComponent itiBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine InstructionMain
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    TextComponent mainInstrText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The main experiment begins now. There will be 50 trials. No feedback will be given. Remember: Focus and react as fast as possible.
      units = norm
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    KeyboardComponent mainInstrKey
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StimulusResponse
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  Routine Fixation
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    TextComponent fixCross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine Foreperiod
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    TextComponent blankScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = NaN
      units = norm
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  Routine FeedbackEarly
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  Routine StimulusResponse
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    TextComponent targetCircle
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = O
      units = norm
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    KeyboardComponent respKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine ITI
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    TextComponent itiBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine FeedbackCorrect
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  Routine Ending
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    TextComponent endText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experiment Complete. Thank you for your participation.
      units = norm
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    KeyboardComponent endKey
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FeedbackSlow
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  Routine ITI
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  Routine Fixation
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  Routine Foreperiod
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  Routine StimulusResponse
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  Routine ITI
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Flow
  Routine InstructionStart
  LoopInitiator PracticeLoop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Fixation
    Routine Foreperiod
    Routine StimulusResponse
    Routine FeedbackEarly
    Routine Fixation
    Routine FeedbackCorrect
    Routine FeedbackSlow
  LoopTerminator PracticeLoop
  Routine Foreperiod
  LoopInitiator MainLoop loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine InstructionMain
    Routine StimulusResponse
    Routine Fixation
  LoopTerminator MainLoop
  Routine Foreperiod
  Routine FeedbackEarly
  Routine StimulusResponse
  Routine ITI
  Routine FeedbackCorrect
  Routine Ending
  Routine FeedbackSlow
  Routine ITI
  Routine Fixation
  Routine Foreperiod
  Routine StimulusResponse
  Routine ITI
