PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = two_word_judgement
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        实验说明：
        欢迎参加本次实验！
        在接下来的任务中，会播放一系列词语。
        任务为：判断是否知道该词语的意义。
          如果知道该词语的意义，请按 “J” 键；
          如果不知道该词语的意义，请按 “F” 键。
        要求： 请在保证准确的前提下，尽可能快地做出判断。
        双手食指可以分别轻放在 “F” 和 “J” 键上以准备按键。
        如果准备好了，请按“空格键”开始。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ending
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        实验结束


        恭喜你！本项实验任务已经全部完成。


        非常感谢你的参与和配合，你的数据对我们的研究非常有价值。


        请告知主试（或者按“空格键”退出程序）。
  Routine first_word
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ref_audio_path = f"experiment_audio//column1//zh_{ref_word.replace(' ', '')}.wav"


        tar_lang = 'en' if tar_col_index in [2, 4] else 'ja'
        tar_audio_path = f"experiment_audio//column{tar_col_index}//{tar_lang}_{tar_word.replace(' ', '_')}.wav"
    SoundComponent sound_first_word
      forceEndRoutine = False
      sound [set every repeat] = $ref_audio_path
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 1.5
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    TextComponent fixation_red
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine second_word
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    SoundComponent sound_second_word
      forceEndRoutine = False
      sound [set every repeat] = $tar_audio_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
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    TextComponent green_fixation
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
      text = +
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    KeyboardComponent key_resp_formal
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
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  Routine ISI
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.
      text = +
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  Routine ITI
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import random
      Begin Routine:
        # Generate a random integer between 500 and 2000, inclusive
        ITI_dur = random.randint(500, 2000)/1000

        # Print the generated number
        #print(ITI_dur)
        #
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
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  Routine cross
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine first_word_prac
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        ref_audio_path_prac = f"experiment_audio//column1//zh_{ref_word_prac.replace(' ', '')}.wav"


        tar_lang_prac = 'en' if tar_col_index_prac in [2, 4] else 'ja'
        tar_audio_path_prac = f"experiment_audio//column{tar_col_index_prac}//{tar_lang_prac}_{tar_word_prac.replace(' ', '_')}.wav"
    TextComponent fixation_red_2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    SoundComponent sound_first_word_prac
      forceEndRoutine = False
      sound [set every repeat] = $ref_audio_path_prac
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 1.5
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine second_word_prac
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    SoundComponent sound_second_word_prac
      forceEndRoutine = False
      sound [set every repeat] = $tar_audio_path_prac
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
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    TextComponent green_fixation_2
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
      text = +
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    KeyboardComponent key_resp_prac
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
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Flow
  Routine Introduction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = loop_prac.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ref_word_prac': '库伦', 'tar_word_prac': 'coulomb', 'tar_col_index_prac': 2},
      {'ref_word_prac': '莱卡', 'tar_word_prac': 'Leica', 'tar_col_index_prac': 2},
      {'ref_word_prac': '库伦', 'tar_word_prac': 'クーロン', 'tar_col_index_prac': 3},
      {'ref_word_prac': '莱卡', 'tar_word_prac': 'ライカ', 'tar_col_index_prac': 3},
      {'ref_word_prac': '库伦', 'tar_word_prac': 'ku lun', 'tar_col_index_prac': 4},
      {'ref_word_prac': '莱卡', 'tar_word_prac': 'lai ka', 'tar_col_index_prac': 4},
      {'ref_word_prac': '库伦', 'tar_word_prac': 'クルンー', 'tar_col_index_prac': 5},
      {'ref_word_prac': '莱卡', 'tar_word_prac': 'ライカ', 'tar_col_index_prac': 5}]
    Routine cross
    Routine first_word_prac
    Routine ISI
    Routine second_word_prac
    Routine ITI
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ref_word': '盎司', 'tar_word': 'ounce', 'tar_col_index': 2},
      {'ref_word': '芭蕾', 'tar_word': 'ballet', 'tar_col_index': 2},
      {'ref_word': '比索', 'tar_word': 'peso', 'tar_col_index': 2},
      {'ref_word': '便士', 'tar_word': 'pence', 'tar_col_index': 2},
      {'ref_word': '布丁', 'tar_word': 'pudding', 'tar_col_index': 2},
      {'ref_word': '丹宁', 'tar_word': 'tannin', 'tar_col_index': 2},
      {'ref_word': '的士', 'tar_word': 'taxi', 'tar_col_index': 2},
      {'ref_word': '鸸鹋', 'tar_word': 'emu', 'tar_col_index': 2},
      {'ref_word': '菲力', 'tar_word': 'filet', 'tar_col_index': 2},
      {'ref_word': '咖喱', 'tar_word': 'curry', 'tar_col_index': 2},
      {'ref_word': '伽马', 'tar_word': 'gamma', 'tar_col_index': 2},
      {'ref_word': '吉他', 'tar_word': 'guitar', 'tar_col_index': 2},
      {'ref_word': '咖啡', 'tar_word': 'coffee', 'tar_col_index': 2},
      {'ref_word': '卡通', 'tar_word': 'cartoon', 'tar_col_index': 2},
      {'ref_word': '卡其', 'tar_word': 'khaki', 'tar_col_index': 2},
      {'ref_word': '可乐', 'tar_word': 'cola', 'tar_col_index': 2},
      {'ref_word': '克拉', 'tar_word': 'carat', 'tar_col_index': 2},
      {'ref_word': '雷达', 'tar_word': 'radar', 'tar_col_index': 2},
      {'ref_word': '伦巴', 'tar_word': 'rumba', 'tar_col_index': 2},
      {'ref_word': '模特', 'tar_word': 'model', 'tar_col_index': 2},
      {'ref_word': '摩登', 'tar_word': 'modern', 'tar_col_index': 2},
      {'ref_word': '慕斯', 'tar_word': 'mousse', 'tar_col_index': 2},
      {'ref_word': '尼龙', 'tar_word': 'nylon', 'tar_col_index': 2},
      {'ref_word': '牛顿', 'tar_word': 'newton', 'tar_col_index': 2},
      {'ref_word': '派对', 'tar_word': 'party', 'tar_col_index': 2}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
    Routine cross
    Routine first_word
    Routine ISI
    Routine second_word
    Routine ITI
  LoopTerminator trials
  Routine ending
