PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine show
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    TextComponent text_show
      color = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $word
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Flow
  LoopInitiator main loopType="TrialHandler"
    conditionsFile = stimgen_conditions.xlsx
    loopType = sequential
    nReps = 4
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    Routine show
  LoopTerminator main
