PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine cue_audio
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    SoundComponent audio_cue_audio
      forceEndRoutine = False
      sound [set every repeat] = assets/beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      volume = 0.8
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  Routine cue_video
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    MovieComponent video_cue_video
      forceEndRoutine = False
      movie [set every repeat] = assets/intro.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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  Routine trial_mouse
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    TextComponent text_trial_mouse
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click the colored square
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    MouseComponent mouse_trial_mouse
      clickable = colored_square
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      syncScreenRefresh = True
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  Routine trial_slider
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    TextComponent text_trial_slider
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rate your mood
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    SliderComponent slider_trial_slider
      borderColor = Black
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ["1\nVery bad","7\nVery good"]
      letterHeight = 0.03
      pos = (0, -0.3)
      size = 1, 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      styles = slider
      ticks = [1,2,3,4,5,6,7]
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  Routine thanks
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    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Done!
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Flow
  Routine cue_audio
  Routine cue_video
  Routine trial_mouse
  Routine trial_slider
  Routine thanks
