PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Stroop task.
        You will see color words (RED, BLUE, GREEN) printed in colored ink.
        Press the key matching the INK COLOR (not the word).
        R=red, B=blue, G=green.
        Press SPACE to begin.
    KeyboardComponent keyboard_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text_fixation
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = +
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  Routine trial
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    TextComponent text_trial
      color = $stim_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $stim_word
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    KeyboardComponent keyboard_trial
      allowedKeys = 'r','b','g'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      store = response
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  Routine thanks
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    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you!
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Flow
  Routine instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = stroop_conditions.xlsx
    loopType = fullRandom
    nReps = 30
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    Routine fixation
    Routine trial
  LoopTerminator main_loop
  Routine thanks
