PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine GlobalInstructions
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    TextComponent instruction_text
      color = #000000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the Stroop Interference Task.

        In this experiment, you will see color words printed in different ink colors. Your task is to identify the INK COLOR of the word, not read the word itself.

        Response Keys:
        F = Red
        J = Blue
        K = Green
        L = Yellow

        Press SPACE to begin practice.
    KeyboardComponent practice_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeLoop
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  Routine MainInstructions
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    TextComponent main_instr_text
      color = #000000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        Great job! Now we begin the main experiment.

        Remember: Identify the INK COLOR as quickly and accurately as possible.
        There will be NO feedback during this phase.
        Press SPACE to start Block 1.
    KeyboardComponent block1_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainExperimentLoop
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  Routine EndingScreen
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    TextComponent end_text
      color = #000000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you for completing the Stroop Interference Task!

        Your data has been saved successfully.
        You may now close this window or press ESC to exit.
    KeyboardComponent exit_key
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine GlobalInstructions
  Routine PracticeLoop
  Routine MainInstructions
  Routine MainExperimentLoop
  Routine EndingScreen
