PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine intro
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to the Simple Reaction Time Task.

        In this study, we measure how quickly you can respond to visual changes on the screen.

        Please keep your index finger on the SPACEBAR throughout the entire session.

        Press SPACEBAR to begin.
    KeyboardComponent intro_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instr
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    TextComponent practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        PRACTICE SESSION

        A fixation cross will appear, followed by a green circle.
        Press SPACEBAR as soon as you see the green circle.

        You will receive feedback on your speed during this practice.

        Press SPACEBAR to start practice.
    KeyboardComponent practice_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine stimulus
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    TextComponent target_circle
      color = #00FF00
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = .
      units = norm
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    KeyboardComponent practice_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine iti
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    TextComponent blank_screen
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine main_instr
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    TextComponent main_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        MAIN EXPERIMENT

        Remember to prioritize speed while maintaining accuracy.

        NO feedback will be given during this task.

        The experiment will begin immediately.

        Press SPACEBAR to start.
    KeyboardComponent main_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine stimulus
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    TextComponent target_circle
      color = #00FF00
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = .
      units = norm
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    KeyboardComponent main_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine iti
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    TextComponent blank_screen
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine debrief
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    TextComponent thank_you_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Thank you for participating!

        This experiment measured your simple reaction time to visual stimuli.
        Your responses help us understand attentional consistency and baseline processing speed.

        Press SPACEBAR to exit.
    KeyboardComponent exit_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine practice_instr
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine stimulus
    Routine iti
  LoopTerminator practice_loop
  Routine main_instr
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine fixation
    Routine stimulus
    Routine iti
  LoopTerminator main_loop
  Routine debrief
